// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation" "TransformBendingEnergyPenalty")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 2)
(ImagePyramidSchedule 8 8 8  4 4 4)

// ********** Transform



(GridSpacingSchedule 16 8 )
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 10 5)
(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")
(NumberOfHistogramBins 128)

// ********** Metric

// Just using the default values for the NC metric
(UseRelativeWeights "true")
(Metric0RelativeWeight 1.0)

(Metric1RelativeWeight 0.2)

// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(ShowExactMetricValue "true")
(ErodeMask "false" "false" "true" "true" "true")
(UseDirectionCosines "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 8000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "true")
(MaximumNumberOfSamplingAttempts 50)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue -1000)

(WriteResultImage "true")

// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "float")
(ResultImageFormat "mhd")
